<?xml version="1.0" encoding="utf-8"?>
<Parameters Duration="1.75" FOVx="32" FOVy="32" FOVz="30" GradMaxAmpl="12" GradSlewRate="53.5" Name="P" Nx="32" Ny="32" Nz="1" TE="8" TR="40">
   <ConcatSequence Aux1="100" Name="Venc">
      <ConcatSequence Aux1="a1/a2" Name="IntersliceCenter" Observe="P,FOVz/P,Nz">
         <CONCATSEQUENCE Aux1="10" Name="Slice" Observe="P,Nz" Repetitions="a1">
            <CONCATSEQUENCE Name="C3" Repetitions="5">
               <ATOMICSEQUENCE Name="A11">
                  <SINCRFPULSE Apodization="0.5" Bandwidth="a1" FlipAngle="a2" Frequency="a3" InitialDelay="a4" Name="P11" Observe="P1,Bandwidth/P1,FlipAngle/P1,Frequency/P12,RampUpTime" Symmetry="0.5" Zeros="3"/>
                  <TRAPGRADPULSE Axis="GZ" FlatTopArea="a1" FlatTopTime="a2" Name="P12" Observe="P10,FlatTopArea/P10,FlatTopTime"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A18">
                  <TRAPGRADPULSE Area="-a1" Axis="GZ" Name="P15" Observe="P12,Area"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A90">
                  <TRAPGRADPULSE Area="a1/2" Axis="GZ" Name="P90" Observe="P12,Area"/>
               </ATOMICSEQUENCE>
               <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D3" Observe="P,TR" StartSeq="A11"/>
            </CONCATSEQUENCE>
            <ConcatSequence Name="C" Observe="P,Ny" Repetitions="a1">
               <ATOMICSEQUENCE Name="A1">
                  <SINCRFPULSE Apodization="0.5" Bandwidth="4" FlipAngle="15" Frequency="a2*((a4-1)/2-a3)*a5" InitialDelay="a1" Name="P1" Observe="P10,RampUpTime/P10,Amplitude/Slice,Counter/Slice,Repetitions/IntersliceCenter,Aux1" Symmetry="0.5" Zeros="3"/>
                  <TRAPGRADPULSE Axis="GZ" FlatTopArea="2*3.1416*a2*a3/a1" FlatTopTime="a2" Name="P10" Observe="Slice,Aux1/P1,Duration/P1,Bandwidth"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A8">
                  <TRAPGRADPULSE Area="-a1" Axis="GZ" Name="P2" Observe="P10,Area"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A9">
                  <TRAPGRADPULSE Area="a1/2" Axis="GZ" Name="P9" Observe="P10,Area"/>
               </ATOMICSEQUENCE>
               <DELAYATOMICSEQUENCE Delay="a1" DelayType="C2C" Name="D1" Observe="P,TE" StartSeq="A1" StopSeq="A6"/>
               <ATOMICSEQUENCE Name="A2">
                  <TRAPGRADPULSE Area="1000*3.14/(2*a1 * a3)" Axis="GX" Duration="a1" Name="P4" Observe="P,Duration/C,Counter/Venc,Aux1"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A3">
                  <TRAPGRADPULSE Area="-a1" Axis="GX" Duration="a2" Name="P8" Observe="P4,Area/P4,Duration"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A60">
                  <TRAPGRADPULSE Area="a1/2" Axis="GX" Name="P50" Observe="P6,Area"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A4">
                  <TRAPGRADPULSE Area="-a1" Axis="GX" Name="P5" Observe="P6,Area"/>
                  <TRAPGRADPULSE Area="a1-a2*a3*(1+1/(a4-1))" Axis="GY" Name="P3" Observe="P,KMAXy/C,Counter/P,DKy/P,Ny"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A6">
                  <TRAPGRADPULSE ADCs="a2" Axis="GX" FlatTopArea="2*a1" FlatTopTime="a3" Name="P6" Observe="P,KMAXx/P,Nx/P,Duration"/>
               </ATOMICSEQUENCE>
               <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D2" Observe="P,TR" StartSeq="A1"/>
            </ConcatSequence>
            <DELAYATOMICSEQUENCE Delay="5000" DelayType="B2E" Name="D7_x"/>
            <CONCATSEQUENCE Name="C3_x" Observe="C3,Repetitions" Repetitions="a1">
               <ATOMICSEQUENCE Name="A11_x">
                  <SINCRFPULSE Apodization="0.5" Bandwidth="a1" FlipAngle="a2" Frequency="a3" InitialDelay="a4" Name="P11_x" Observe="P1,Bandwidth/P1,FlipAngle/P1,Frequency/P12_x,RampUpTime" Symmetry="0.5" Zeros="3"/>
                  <TRAPGRADPULSE Axis="GZ" FlatTopArea="a1" FlatTopTime="a2" Name="P12_x" Observe="P10,FlatTopArea/P10,FlatTopTime"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A18_x">
                  <TRAPGRADPULSE Area="-a1" Axis="GZ" Name="P15_x" Observe="P12,Area"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A90_x">
                  <TRAPGRADPULSE Area="a1/2" Axis="GZ" Name="P90_x" Observe="P12,Area"/>
               </ATOMICSEQUENCE>
               <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D3_x" Observe="P,TR" StartSeq="A11_x"/>
            </CONCATSEQUENCE>
            <ConcatSequence Name="C_x" Observe="P,Ny" Repetitions="a1">
               <ATOMICSEQUENCE Name="A1_x">
                  <SINCRFPULSE Apodization="0.5" Bandwidth="a1" FlipAngle="a2" Frequency="a3" InitialDelay="a4" Name="P1_x" Observe="P1,Bandwidth/P1,FlipAngle/P1,Frequency/P10_x,RampUpTime" Symmetry="0.5" Zeros="3"/>
                  <TRAPGRADPULSE Axis="GZ" FlatTopArea="2*3.1416*a2*a3/a1" FlatTopTime="a2" Name="P10_x" Observe="Slice,Aux1/P1_x,Duration/P1_x,Bandwidth"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A8_x">
                  <TRAPGRADPULSE Area="-a1" Axis="GZ" Name="P2_x" Observe="P10_x,Area"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A9_x">
                  <TRAPGRADPULSE Area="a1/2" Axis="GZ" Name="P9_x" Observe="P10_x,Area"/>
               </ATOMICSEQUENCE>
               <DELAYATOMICSEQUENCE Delay="a1" DelayType="C2C" Name="D1_x" Observe="P,TE" StartSeq="A1_x" StopSeq="A6_x"/>
               <ATOMICSEQUENCE Name="A2_x">
                  <TRAPGRADPULSE Area="-1000*3.14/(2*a1 * a3)" Axis="GX" Duration="a1" Name="P4_x" Observe="P,Duration/C_x,Counter/Venc,Aux1"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A3_x">
                  <TRAPGRADPULSE Area="-a1" Axis="GX" Duration="a2" Name="P8_x" Observe="P4_x,Area/P4_x,Duration"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A60_x">
                  <TRAPGRADPULSE Area="a1/2" Axis="GX" Name="P50_x" Observe="P6_x,Area"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A4_x">
                  <TRAPGRADPULSE Area="-a1" Axis="GX" Name="P5_x" Observe="P6_x,Area"/>
                  <TRAPGRADPULSE Area="a1-a2*a3*(1+1/(a4-1))" Axis="GY" Name="P3_x" Observe="P,KMAXy/C_x,Counter/P,DKy/P,Ny"/>
               </ATOMICSEQUENCE>
               <ATOMICSEQUENCE Name="A6_x">
                  <TRAPGRADPULSE ADCs="a2" Axis="GX" FlatTopArea="2*a1" FlatTopTime="a3" Name="P6_x" Observe="P,KMAXx/P,Nx/P,Duration"/>
               </ATOMICSEQUENCE>
               <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D2_x" Observe="P,TR" StartSeq="A1_x"/>
            </ConcatSequence>
            <DELAYATOMICSEQUENCE Delay="5000" DelayType="B2E" Name="D77"/>
         </CONCATSEQUENCE>
      </ConcatSequence>
   </ConcatSequence>
</Parameters>