<?xml version="1.0" encoding="utf-8"?>
<ConcatSequence Name="New Sequence">
   <Parameter TR="10"/>
   <AtomicSequence Name="AtomicSequence">
      <HardRfPulseShape ADCs="10" Duration="0.1" FlipAngle="60" Name="HardRfPulseShape" Phase="0"/>
   </AtomicSequence>
   <DelayAtom ADCs="100" Delay="TR" DelayType="B2E" Factor="1" Name="DelayAtom"/>
   <AtomicSequence Name="AtomicSequence">
      <HardRfPulseShape ADCs="10" Duration="0.1" FlipAngle="90" Name="HardRfPulseShape" Phase="90"/>
   </AtomicSequence>
   <DelayAtom ADCs="200" Delay="TR" DelayType="B2E" Factor="1.5" Name="DelayAtom"/>
   <AtomicSequence Name="AtomicSequence">
      <HardRfPulseShape ADCs="10" Duration="0.1" FlipAngle="90" Name="HardRfPulseShape" Phase="90"/>
   </AtomicSequence>
   <DelayAtom ADCs="400" Delay="TR" DelayType="B2E" Factor="3" Name="DelayAtom"/>
</ConcatSequence>