<?xml version="1.0" encoding="utf-8"?>
<Parameters Name="P" TR="10">
   <ConcatSequence Name="C">
      <AtomicSequence Name="A1">
         <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="60" Name="P1"/>
      </AtomicSequence>
      <DelayAtomicSequence ADCs="100" Delay="a1" DelayType="B2E" Name="D1" Observe="P,TR"/>
      <AtomicSequence Name="A2">
         <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="90" Name="P2"/>
      </AtomicSequence>
      <DelayAtomicSequence ADCs="200" Delay="1.5*a1" DelayType="B2E" Name="D2" Observe="P,TR"/>
      <AtomicSequence Name="A3">
         <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="90" Name="P3"/>
      </AtomicSequence>
      <DelayAtomicSequence ADCs="400" Delay="3*a1" DelayType="B2E" Name="D3" Observe="P,TR"/>
   </ConcatSequence>
</Parameters>