<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="256" FOVy="256" GradMaxAmpl="2" GradSlewRate="10" Name="P" Nx="64" Ny="64" TE="50" TR="10">
   <ConcatSequence Name="C1">
      <AtomicSequence Name="A0">
         <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="90" Name="P1"/>
      </AtomicSequence>
      <ATOMICSEQUENCE Name="A1">
         <TrapGradPulse Area="-0.5*abs(A)" Axis="GX" Name="P2" Observe="A=P3.Area"/>
      </ATOMICSEQUENCE>
      <AtomicSequence Name="A3">
         <TrapGradPulse ADCFlag="1" ADCs="64" Axis="GX" FlatTopArea="2*A" FlatTopTime="1" Name="P3" Observe="A=P.KMAXx, N=P.Nx"/>
         <TrapGradPulse Axis="GX" EddyConvLength="20" EddyCurrents="0.5*exp(-10*T)" FlatTopArea="2*A" FlatTopTime="1" Hide="1" Name="E3X" Observe="A=P.KMAXx"/>
         <TrapGradPulse Axis="GY" EddyConvLength="20" EddyCurrents="0.5*exp(-10*T)" FlatTopArea="2*A" FlatTopTime="1" Hide="1" Name="E3Y" Observe="A=P.KMAXx"/>
         <TrapGradPulse Axis="GZ" EddyConvLength="20" EddyCurrents="0.5*exp(-20*T)" FlatTopArea="2*A" FlatTopTime="1" Hide="1" Name="E3Z" Observe="A=P.KMAXx"/>
      </AtomicSequence>
      <DELAYATOMICSEQUENCE ADCFlag="0" ADCs="100" Delay="D" DelayType="B2E" Name="D1" Observe="D=P.TR" StartSeq="A0"/>
   </ConcatSequence>
</Parameters>