<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="32" FOVy="32" FOVz="1" Name="P" Nx="32" Ny="32" Nz="1" TE="5" TR="20">
   <ConcatSequence LoopFlag="2" Name="C" Observe="NY=P.Ny" Repetitions="NY">
      <ATOMICSEQUENCE Name="A1">
         <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="50" Name="P1"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A2" Observe="C=C.Counter, R=C.Repetitions" RotAngle="180*C/R">
         <TRAPGRADPULSE Area="-A/2" Axis="GX" Name="P2" Observe="A=P3.Area"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A3" Observe="C=C.Counter, R=C.Repetitions" RotAngle="180*C/R">
         <TRAPGRADPULSE ADCFlag="2" ADCs="NX" Axis="GX" FlatTopArea="2*KMX" FlatTopTime="8" Name="P3" Observe="KMX=P.KMAXx, NX=P.Nx"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A4" Observe="C=C.Counter, R=C.Repetitions" RotAngle="180*C/R">
         <TRAPGRADPULSE Area="-A/2" Axis="GX" Name="P4" Observe="A=P3.Area"/>
      </ATOMICSEQUENCE>
      <DELAYATOMICSEQUENCE Delay="TR" DelayType="B2E" Name="D1" Observe="TR=P.TR" StartSeq="A1"/>
   </ConcatSequence>
</Parameters>