<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="50" Name="P" Nx="2">
   <ConcatSequence Name="C1" Observe="P,Nx" Repetitions="a1">
      <ATOMICSEQUENCE Aux1="a1-a2/2" Name="A1" Observe="C1,Counter/C1,Repetitions">
         <SINCRFPULSE ADCs="-100" Apodization="0.5" Bandwidth="3" FlipAngle="90" Frequency="a1*a2*a3" InitialDelay="a4" Name="P1" Observe="C1,Counter/P,Dx/P2,Amplitude/P2,RampUpTime" Zeros="4"/>
         <TRAPGRADPULSE ADCs="5" Axis="GX" FlatTopArea="4*a2*a3" FlatTopTime="a1" MaxAmpl="5" Name="P2" Observe="P1,Duration/P1,Bandwidth/P,KMAXx" SlewRate="10"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A2">
         <TRAPGRADPULSE ADCs="5" Area="-0.5*a1" Axis="GX" MaxAmpl="5" Name="P3" Observe="P2,Area" SlewRate="10"/>
      </ATOMICSEQUENCE>
      <DELAYATOMICSEQUENCE ADCs="1" Delay="0.1" DelayType="B2E" Name="D1"/>
   </ConcatSequence>
</Parameters>