<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="200" GradRiseTime="0.1" Name="P" Nx="64">
   <ConcatSequence Name="C1" Repetitions="1">
      <ATOMICSEQUENCE Name="A1">
         <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="90" Name="P1"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A2">
         <TRAPGRADPULSE Area="-A/2" Axis="GX" Name="pre" Observe="A=ro.Area"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A3">
         <TRAPGRADPULSE ADCs="NX" Axis="GX" FlatTopArea="2*KMX" FlatTopTime="4" Frequency="Pi" InitialPhase="180" Name="ro" Observe="NX=P.Nx, KMX=P.KMAXx"/>
      </ATOMICSEQUENCE>
   </ConcatSequence>
</Parameters>
