
<JEMRIS_MODULES>

  <CONCATS>
    <CONCATSEQUENCE Aux1="0" Aux2="0" Aux3="0" CounterHIDDEN="0" DurationHIDDEN="0" HardwareMode="0" Name="CONCATSEQUENCE" Observe="" Repetitions="1" Vector=""/>
    <CONTAINER DurationHIDDEN="0" Exp1HIDDEN="0" Exp2HIDDEN="0" Exp3HIDDEN="0" Filename="" HardwareMode="0" Imp1="0" Imp2="0" Imp3="0" Imp4="0" Imp5="0" Imp6="0" Imp7="0" Imp8="0" Imp9="0" Name="CONTAINER" Observe=""/>
    <CONTAINERSEQUENCE DurationHIDDEN="0" Exp1="0" Exp2="0" Exp3="0" HardwareMode="0" Imp1HIDDEN="0" Imp2HIDDEN="0" Imp3HIDDEN="0" Imp4HIDDEN="0" Imp5HIDDEN="0" Imp6HIDDEN="0" Imp7HIDDEN="0" Imp8HIDDEN="0" Imp9HIDDEN="0" Info_Exp1="" Info_Exp2="" Info_Exp3="" Info_Imp1="" Info_Imp2="" Info_Imp3="" Info_Imp4="" Info_Imp5="" Info_Imp6="" Info_Imp7="" Info_Imp8="" Info_Imp9="" Name="CONTAINERSEQUENCE" Observe=""/>
  </CONCATS>

  <ATOMS>
    <ATOMICSEQUENCE Aux1="0" Aux2="0" Aux3="0" Azimuth="0" DurationHIDDEN="0" HardwareMode="0" Inclination="0" Name="ATOMICSEQUENCE" Observe="" RotAngle="0" Vector=""/>
    <DELAYATOMICSEQUENCE ADCs="0" Aux1="0" Aux2="0" Aux3="0" Delay="0" DelayType="B2E" DurationHIDDEN="0" HardwareMode="0" Name="DELAYATOMICSEQUENCE" Observe="" PhaseLock="0" StartSeq="" StopSeq="" Vector=""/>
  </ATOMS>

  <PULSES>
    <ANALYTICGRADPULSE ADCs="0" AreaHIDDEN="nan" Axis="" Constants="" Diff="" Duration="0" EC_AreaHIDDEN="0" EddyConvLength="0" EddyCurrents="0" HardwareMode="0" Hide="0" InitialDelay="0" NLG_field="0" Name="ANALYTICGRADPULSE" Observe="" PhaseLock="0" Shape="0" Vector=""/>
    <ANALYTICRFPULSE ADCs="0" BandwidthHIDDEN="0" Channel="0" Constants="" Diff="" Duration="0" FlipAngleHIDDEN="0" Frequency="0" HardwareMode="0" InitialDelay="0" InitialPhase="0" Name="ANALYTICRFPULSE" Observe="" Refocusing="0" Shape="0" Symmetry="0.5" Vector=""/>
    <CONSTANTGRADPULSE ADCs="0" Amplitude="0" AreaHIDDEN="0" Axis="" Duration="0" EC_AreaHIDDEN="0" EddyConvLength="0" EddyCurrents="0" HardwareMode="0" Hide="0" InitialDelay="0" NLG_field="0" Name="CONSTANTGRADPULSE" Observe="" PhaseLock="0" Vector=""/>
    <EMPTYPULSE ADCs="0" Axis="" Constants="" Diff="" Duration="0" HardwareMode="0" InitialDelay="0" Name="EMPTYPULSE" Observe="" PhaseLock="0" Shape="0" Vector=""/>
    <EXTERNALGRADPULSE ADCs="0" AreaHIDDEN="0" Axis="" DurationHIDDEN="0" EC_AreaHIDDEN="0" EddyConvLength="0" EddyCurrents="0" Filename="" HardwareMode="0" Hide="0" InitialDelay="0" Interpolate="0" NLG_field="0" Name="EXTERNALGRADPULSE" Observe="" PhaseLock="0" Scale="1" Vector=""/>
    <EXTERNALRFPULSE ADCs="0" Channel="0" Duration="0" Filename="" FlipAngle="0" Frequency="0" HardwareMode="0" InitialDelay="0" InitialPhase="0" Interpolate="0" Name="EXTERNALRFPULSE" Observe="" Refocusing="0" Scale="1" Symmetry="0.5" Vector=""/>
    <GAUSSIANRFPULSE ADCs="0" Bandwidth="0" Channel="0" Duration="0" FlipAngle="0" Frequency="0" HardwareMode="0" InitialDelay="0" InitialPhase="0" Name="GAUSSIANRFPULSE" Observe="" Refocusing="0" Symmetry="0.5" Vector=""/>
    <HARDRFPULSE ADCs="0" Channel="0" Duration="0" FlipAngle="0" Frequency="0" HardwareMode="0" InitialDelay="0" InitialPhase="0" Name="HARDRFPULSE" Observe="" Refocusing="0" Symmetry="0.5" Vector=""/>
    <SECHRFPULSE ADCs="0" BandwidthHIDDEN="0" Channel="0" Duration="5.12" FlipAngle="210" FrequencyHIDDEN="0" HardwareMode="0" InitialDelay="0" InitialPhase="0" Name="SECHRFPULSE" Observe="" Refocusing="0" Symmetry="0.5" Vector=""/>
    <SINCRFPULSE ADCs="0" Apodization="0.5" Bandwidth="10" Channel="0" DurationHIDDEN="0.6" FlipAngle="90" Frequency="0" HardwareMode="0" InitialDelay="0" InitialPhase="0" Name="SINCRFPULSE" Observe="" Refocusing="0" Symmetry="0.5" Vector="" Zeros="3"/>
    <SPIRALGRADPULSE ADCs="0" Area="0" Arms="0" Axis="" BandWidth="0" Duration="0" EC_AreaHIDDEN="0" EddyConvLength="0" EddyCurrents="0" FOV="0" GradSampInt="0" HardwareMode="0" Hide="0" InitialDelay="0" Inward="0" MaxAmpl="1" MaxGrad="0" MaxSlew="0" NLG_field="0" Name="SPIRALGRADPULSE" Observe="" PhaseLock="0" SlewRate="0" Vector=""/>
    <TRAPGRADPULSE ADCs="0" AmplitudeHIDDEN="0" Area="0" Asymmetric="0" Axis="" Duration="0" EC_AreaHIDDEN="0" EddyConvLength="0" EddyCurrents="0" EndOfFlatTopHIDDEN="0" FlatTopArea="0" FlatTopTime="0" Frequency="0" HardwareMode="0" Hide="0" InitialDelay="0" InitialPhase="0" MaxAmpl="1" NLG_field="0" Name="TRAPGRADPULSE" Observe="" PhaseLock="0" RampDnTimeHIDDEN="0" RampUpTimeHIDDEN="0" SlewRate="1" Vector=""/>
    <TRIANGLEGRADPULSE ADCs="0" Amplitude="0" AreaHIDDEN="0" Axis="" Duration="1e-05" EC_AreaHIDDEN="0" EddyConvLength="0" EddyCurrents="0" HardwareMode="0" Hide="0" InitialDelay="0" NLG_field="0" Name="TRIANGLEGRADPULSE" Observe="" PhaseLock="0" TriangleType="UP" Vector=""/>
  </PULSES>

  <PARAMETERS DKxHIDDEN="0.0628319" DKyHIDDEN="0.0628319" DKzHIDDEN="inf" DxHIDDEN="1.5625" DyHIDDEN="1.5625" DzHIDDEN="0" FOVx="100" FOVy="100" FOVz="0" GradMaxAmpl="1" GradRiseTime="0" GradSlewRate="1" HardwareMode="0" KMAXxHIDDEN="2.01062" KMAXyHIDDEN="2.01062" KMAXzHIDDEN="inf" Name="PARAMETERS" Nx="64" Ny="64" Nz="1" TD="0" TE="0" TI="0" TR="0"/>

</JEMRIS_MODULES>