<?xml version="1.0" encoding="utf-8"?>
<Parameters FOVx="64" FOVy="64" FOVz="1" Name="P" Nx="32" Ny="32" Nz="1" TE="15" TR="150">
   <ConcatSequence Name="TSE">
      <ConcatSequence Name="O" Observe="P,Ny/I,Repetitions" Repetitions="a1/a2">
         <ATOMICSEQUENCE Name="A1">
            <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="90" Name="P1"/>
         </ATOMICSEQUENCE>
         <ATOMICSEQUENCE Name="A2">
            <TRAPGRADPULSE Area="0.5*a1" Axis="GX" Name="P2" Observe="P5,Area"/>
         </ATOMICSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="a1/2" DelayType="B2E" Name="D1" Observe="P,TE" StartSeq="A1"/>
         <CONCATSEQUENCE Name="I" Repetitions="4">
            <ATOMICSEQUENCE Name="A3">
               <HARDRFPULSE Axis="RF" Duration="0.1" FlipAngle="180" InitialPhase="90" Name="P3"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A4">
               <TRAPGRADPULSE Area="-a1+a2*(a3+a4*a5)" Axis="GY" Name="P4" Observe="P,KMAXy/P,DKy/I,Counter/I,Repetitions/O,Counter"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="a1/2" DelayType="C2C" Name="D2" Observe="P,TE" StartSeq="A3" StopSeq="A5"/>
            <ATOMICSEQUENCE Name="A5">
               <TRAPGRADPULSE Axis="GX"  ADCs="a2" FlatTopArea="2*a1" FlatTopTime="4" Observe="P,KMAXx/P,Nx" Name="P5"/>
            </ATOMICSEQUENCE>
            <ATOMICSEQUENCE Name="A6">
               <TRAPGRADPULSE Area="-a1" Axis="GY" Name="P6" Observe="P4,Area"/>
            </ATOMICSEQUENCE>
            <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D3" Observe="P,TE" StartSeq="A3"/>
         </CONCATSEQUENCE>
         <DELAYATOMICSEQUENCE Delay="a1" DelayType="B2E" Name="D4" Observe="P,TR" StartSeq="A1"/>
      </ConcatSequence>
   </ConcatSequence>
</Parameters>
