<?xml version="1.0" encoding="utf-8"?>
<Parameters Name="P">
   <ConcatSequence Name="C1" Repetitions="1">
      <ATOMICSEQUENCE Name="A1">
         <ANALYTICRFPULSE Duration="10" Name="P1" Shape="exp(-0.2*(T-5)^2+I*0.005*T^2)" TPOIs="50"/>
         <TRAPGRADPULSE Area="1" Axis="GZ" Duration="10" Name="P2"/>
      </ATOMICSEQUENCE>
      <ATOMICSEQUENCE Name="A3">
         <ANALYTICGRADPULSE Axis="GX" Diff="1" Duration="30" NLG_field="G*R+0.001*G*R^2" Name="P3" Shape="sqrt(0.5+T)*cos(3*T)" TPOIs="512"/>
         <ANALYTICGRADPULSE ADCs="64" Axis="GY" Diff="1" Duration="30" Name="P4" Shape="sqrt(0.05+0.5*T)*sin(3*T)" TPOIs="512"/>
      </ATOMICSEQUENCE>
   </ConcatSequence>
</Parameters>