<?xml version="1.0" encoding="UTF-8" standalone="no" ?>
<JEMRIS_MODULES>

  <CONCATS>
    <CONCATSEQUENCE Aux1="0" Aux2="0" Aux3="0" CounterHIDDEN="0" DurationHIDDEN="0" Name="CONCATSEQUENCE" Observe="" Repetitions="1" Vector=""/>
  </CONCATS>

  <ATOMS>
    <ATOMICSEQUENCE Aux1="0" Aux2="0" Aux3="0" Azimut="0" DurationHIDDEN="0" Inclination="0" Name="ATOMICSEQUENCE" Observe="" RotAngle="0" Vector=""/>
    <DELAYATOMICSEQUENCE ADCs="0" Aux1="0" Aux2="0" Aux3="0" Delay="0" DelayType="B2E" DurationHIDDEN="0" Name="DELAYATOMICSEQUENCE" Observe="" PhaseLock="0" StartSeq="" StopSeq="" Vector=""/>
  </ATOMS>

  <PULSES>
    <ANALYTICGRADPULSE ADCs="0" AreaHIDDEN="0" Axis="1" Constants="" Diff="" Duration="0" InitialDelay="0" NLG_field="0" Name="ANALYTICGRADPULSE" Observe="" PhaseLock="0" Shape="0" TPOIs="0" Vector=""/>
    <ANALYTICRFPULSE ADCs="0" Bandwidth="0" Channel="0" Constants="" Diff="" Duration="0" FlipAngleHIDDEN="0" Frequency="0" InitialDelay="0" InitialPhase="0" Name="ANALYTICRFPULSE" Observe="" PhaseLock="0" Shape="0" TPOIs="0" Vector=""/>
    <EMPTYPULSE ADCs="0" Axis="4" Duration="0" InitialDelay="0" Name="EMPTYPULSE" Observe="" PhaseLock="0" Vector=""/>
    <EXTERNALGRADPULSE ADCs="0" Area="0" Axis="1" Duration="0" Filename="" InitialDelay="0" MaxAmpl="0" NLG_field="0" Name="EXTERNALGRADPULSE" Observe="" PhaseLock="0" Scale="1" SlewRate="0" Vector=""/>
    <EXTERNALRFPULSE ADCs="0" Channel="0" Duration="0" Filename="" FlipAngle="0" Frequency="0" InitialDelay="0" InitialPhase="0" Name="EXTERNALRFPULSE" Observe="" PhaseLock="0" Scale="1" Vector=""/>
    <GAUSSIANRFPULSE ADCs="0" Bandwidth="0" Channel="0" Duration="0" FlipAngle="0" Frequency="0" InitialDelay="0" InitialPhase="0" Name="GAUSSIANRFPULSE" Observe="" PhaseLock="0" Vector=""/>
    <HARDRFPULSE ADCs="0" Channel="0" Duration="0" FlipAngle="0" Frequency="0" InitialDelay="0" InitialPhase="0" Name="HARDRFPULSE" Observe="" PhaseLock="0" Vector=""/>
    <SINCRFPULSE ADCs="0" Apodization="0.5" Bandwidth="10" Channel="0" DurationHIDDEN="0.6" FlipAngle="90" Frequency="0" InitialDelay="0" InitialPhase="0" Name="SINCRFPULSE" Observe="" PhaseLock="0" Vector="" Zeros="3"/>
    <SPIRALGRADPULSE ADCs="0" Alpha="0" Area="0" Axis="1" Duration="0" InitialDelay="0" MaxAmpl="1" NLG_field="0" Name="SPIRALGRADPULSE" Observe="" PhaseLock="0" Pitch="0" SlewRate="1" Vector=""/>
    <TRAPGRADPULSE ADCs="0" AmplitudeHIDDEN="0" Area="0" Asymetric="0" Axis="1" Duration="0" EndOfFlatTopHIDDEN="0" FlatTopArea="0" FlatTopTime="0" InitialDelay="0" MaxAmpl="1" NLG_field="0" Name="TRAPGRADPULSE" Observe="" PhaseLock="0" RampDnTimeHIDDEN="0" RampUpTimeHIDDEN="0" SlewRate="1" Vector=""/>
  </PULSES>

  <PARAMETERS DKxHIDDEN="0.0628319" DKyHIDDEN="0.0628319" DKzHIDDEN="Infinity" DxHIDDEN="1.5625" DyHIDDEN="1.5625" DzHIDDEN="0" FOVx="100" FOVy="100" FOVz="0" GradMaxAmpl="1" GradSlewRate="1" KMAXxHIDDEN="2.01062" KMAXyHIDDEN="2.01062" KMAXzHIDDEN="Infinity" Name="PARAMETERS" Nx="64" Ny="64" Nz="1" TD="0" TE="0" TI="0" TR="0"/>

</JEMRIS_MODULES>
